CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Cytoplasm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Nano
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:lys
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Cytoplasm
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):200,800
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.5
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:cells
    Name the output objects:filtered_cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:60000
    Filter using a maximum measurement value?:No
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
Smooth:[module_num:8|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
    Select the input image:Nano
    Name the output image:smooth_nano
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
    Edge intensity difference:0.1
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
Threshold:[module_num:9|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
    Select the input image:smooth_nano
    Name the output image:Thresholded_nano
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.08,1.0
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    Lower outlier fraction:0.9
    Upper outlier fraction:0.00
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
MaskImage:[module_num:10|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
    Select the input image:smooth_nano
    Name the output image:mask_threhsold_nano
    Use objects or an image as a mask?:Image
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    Select image for mask:Thresholded_nano
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:smooth_nano
    Name the primary objects to be identified:nano_peaks
    Typical diameter of objects, in pixel units (Min,Max):2,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:280000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.08,1
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    Lower outlier fraction:0.9
    Upper outlier fraction:0.00
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3
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
MaskObjects:[module_num:12|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
    Select objects to be masked:nano_peaks
    Name the masked objects:Masked_nano_peaks
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:filtered_cells
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.95
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskImage:[module_num:13|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
    Select the input image:Nano
    Name the output image:image_nano_objects
    Use objects or an image as a mask?:Objects
    Select object for mask:Masked_nano_peaks
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    Invert the mask?:No

Threshold:[module_num:14|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
    Select the input image:lys
    Name the output image:Threshold_lys
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:lys
    Name the primary objects to be identified:lys_objects
    Typical diameter of objects, in pixel units (Min,Max):5,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:lys_objects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:17|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
    Parent objects:lys_objects
    Child objects:Masked_nano_peaks
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:lys_nano_child
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
MaskImage:[module_num:18|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
    Select the input image:lys
    Name the output image:mask_lys
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_lys
    Invert the mask?:No

MaskImage:[module_num:19|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
    Select the input image:mask_lys
    Name the output image:Mask_lys_2
    Use objects or an image as a mask?:Objects
    Select object for mask:filtered_cells
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    Invert the mask?:No

RelateObjects:[module_num:20|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
    Parent objects:filtered_cells
    Child objects:Masked_nano_peaks
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Related_cells_nano
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
MaskImage:[module_num:21|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
    Select the input image:mask_threhsold_nano
    Name the output image:mask_lys_nano
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask_lys_2
    Invert the mask?:No

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:smooth_nano
    Select objects to measure:Masked_nano_peaks

MeasureObjectIntensity:[module_num:23|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
    Select images to measure:mask_lys_nano
    Select objects to measure:filtered_cells

MeasureObjectIntensity:[module_num:24|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
    Select images to measure:mask_threhsold_nano
    Select objects to measure:filtered_cells

MeasureColocalization:[module_num:25|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
    Select images to measure:mask_lys, mask_threhsold_nano
    Set threshold as percentage of maximum intensity for the images:0
    Select where to measure correlation:Within objects
    Select objects to measure:filtered_cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

GrayToColor:[module_num:26|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:image_nano_objects
    Select the image to be colored green:Mask_lys_2
    Select the image to be colored blue:Cytoplasm
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FFFFFF
    Select objects to display:filtered_cells

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:_overlay_
    Number of digits:3
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    Saved file format:png
    Output file location:Default Output Folder|Desktop/Orig_overlay_images_tri_ov_24h
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:lys_objects|Location_Center_X,lys_objects|Location_Center_Z,lys_objects|Location_Center_Y,lys_objects|Children_Masked_nano_peaks_Count,Masked_nano_peaks|Intensity_MedianIntensity_smooth_nano,Masked_nano_peaks|Intensity_MeanIntensity_smooth_nano,Masked_nano_peaks|Intensity_IntegratedIntensity_smooth_nano,Masked_nano_peaks|Location_Center_X,Masked_nano_peaks|Location_Center_Y,Masked_nano_peaks|Distance_Minimum_lys_objects,Masked_nano_peaks|Distance_Centroid_lys_objects,Masked_nano_peaks|Children_lys_nano_child_Count,Masked_nano_peaks|Children_Related_cells_nano_Count,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:hek_3h_rep2_
    Overwrite existing files without warning?:No
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